# Generated by Configurator on Mon Aug 30 16:04:49 EDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,Cam,DemoCamera,DCam
Device,Objective,DemoCamera,DObjective
Device,Z_Stage,DemoCamera,DStage
Device,XY_Stage,DemoCamera,DXYStage

# Pre-init settings for devices
Property,Cam,MaximumExposureMs,10000.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Cam,DHub
Parent,Objective,DHub
Parent,Z_Stage,DHub
Parent,XY_Stage,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,Z_Stage,0

# Roles
Property,Core,Camera,Cam
Property,Core,Focus,Z_Stage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,100X 1.4 Oil
Label,Objective,4,60X 1.2 Oil
Label,Objective,3,40X 0.95 Air
Label,Objective,2,20X 0.75 NA Air
Label,Objective,1,10X 0.3 NA Air
Label,Objective,0,4X 0.1 NA Air

# Configuration presets
# Group: Channel
# Preset: FITC
ConfigGroup,Channel,FITC,Cam,Mode,Artificial Waves

# Preset: DAPI
ConfigGroup,Channel,DAPI,Cam,Mode,Color Test Pattern

# Preset: Cy3
ConfigGroup,Channel,Cy3,Cam,Mode,Noise


# Group: dia_fake
# Preset: NewPreset
ConfigGroup,dia_fake,NewPreset,Cam,Exposure,2120.0000


# Group: epi_fake
# Preset: NewPreset
ConfigGroup,epi_fake,NewPreset,Cam,Exposure,10.0000



# PixelSize settings
